CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag all of the image data folders here. THey can include both stitched and raw images. You must preserve the original folder srtucture.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory does containregexp "Stitched")

Metadata:[module_num:2|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notes:['Extract a simplified version of the file name']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2})ROI(?P<ROI>[0-9]).*.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Match up teh images by channel names stored in the file na,e']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Red")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Green")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Blue")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GrayToColor:[module_num:5|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notes:['Merge the channels to RGB, rescaling to min/max (approximately)']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Red
    Select the image to be colored green:Green
    Select the image to be colored blue:Blue
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:6|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notes:['Save the RGB images in the same folder as the image with a simplified name identifying "well" and ROI.']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
    Select the type of image to save:Image
    Select the image to save:ColorImage
    Select method for constructing file names:Single name
    Select image name for file prefix:Red
    Enter single file name:\g<Well>ROI\g<ROI>_Stitched_Merged
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    Saved file format:tiff
    Output file location:Same folder as image|my file hierarchy
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Merging_
    Overwrite existing files without warning?:No
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